<?xml version="1.0" encoding="UTF-8"?><batch>
    <batchstep method="io.github.mzmine.modules.io.rawdataimport.RawDataImportModule">
        <parameter name="Raw data file names">
            <file>/media/echo/DATA/yellow/massive/cell/massive.ucsd.edu/MSV000083593/ccms_peak/mzXML/all_samples/Plate_01_BA1_01_21414.mzML</file>
            <file>/media/echo/DATA/yellow/massive/cell/massive.ucsd.edu/MSV000083593/ccms_peak/mzXML/all_samples/Plate_01_BA2_01_21415.mzML</file>
            <file>/media/echo/DATA/yellow/massive/cell/massive.ucsd.edu/MSV000083593/ccms_peak/mzXML/all_samples/Plate_01_BA3_01_21416.mzML</file>
            <file>/media/echo/DATA/yellow/massive/cell/massive.ucsd.edu/MSV000083593/ccms_peak/mzXML/all_samples/Plate_01_BA4_01_21417.mzML</file>
            <file>/media/echo/DATA/yellow/massive/cell/massive.ucsd.edu/MSV000083593/ccms_peak/mzXML/all_samples/Plate_01_BA5_01_21418.mzML</file>
            <file>/media/echo/DATA/yellow/massive/cell/massive.ucsd.edu/MSV000083593/ccms_peak/mzXML/all_samples/Plate_01_BA6_01_21419.mzML</file>
            <file>/media/echo/DATA/yellow/massive/cell/massive.ucsd.edu/MSV000083593/ccms_peak/mzXML/all_samples/Plate_01_BA7_01_21420.mzML</file>
            <file>/media/echo/DATA/yellow/massive/cell/massive.ucsd.edu/MSV000083593/ccms_peak/mzXML/all_samples/Plate_01_BA8_01_21421.mzML</file>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Mass detector" selected="Centroid">
            <module name="Centroid">
                <parameter name="Noise level">200.0</parameter>
            </module>
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        </parameter>
        <parameter name="Mass list name">mass1</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>2</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Mass detector" selected="Centroid">
            <module name="Centroid">
                <parameter name="Noise level">0.0</parameter>
            </module>
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        </parameter>
        <parameter name="Mass list name">mass2</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_ADAPchromatogrambuilder.ADAPChromatogramBuilderModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Mass list">mass1</parameter>
        <parameter name="Min group size in # of scans">2</parameter>
        <parameter name="Group intensity threshold">500.0</parameter>
        <parameter name="Min highest intensity">1000.0</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">chromatograms</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.DeconvolutionModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Suffix">deconvoluted</parameter>
        <parameter name="Algorithm" selected="Wavelets (ADAP)">
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            <module name="Wavelets (ADAP)">
                <parameter name="S/N threshold">5.0</parameter>
                <parameter name="S/N estimator" selected="Intensity window SN">
                    <module name="Intensity window SN"/>
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                </parameter>
                <parameter name="min feature height">1000.0</parameter>
                <parameter name="coefficient/area threshold">20.0</parameter>
                <parameter name="Peak duration range">
                    <min>0.0</min>
                    <max>10.0</max>
                </parameter>
                <parameter name="RT wavelet range">
                    <min>0.0</min>
                    <max>0.1</max>
                </parameter>
            </module>
        </parameter>
        <parameter measure="MEDIAN" name="m/z center calculation" weighting="NONE">CenterFunction</parameter>
        <parameter name="m/z range for MS2 scan pairing (Da)" selected="false"/>
        <parameter name="RT range for MS2 scan pairing (min)" selected="false"/>
        <parameter name="Remove original feature list">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_deisotoper.IsotopeGrouperModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">deisotoped</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" type="absolute">0.1</parameter>
        <parameter name="Monotonic shape">true</parameter>
        <parameter name="Maximum charge">1</parameter>
        <parameter name="Representative isotope">Lowest m/z</parameter>
        <parameter name="Remove original peaklist">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Feature list name">neg_all-Aligned feature list</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Weight for m/z">75.0</parameter>
        <parameter name="Retention time tolerance" type="absolute">0.1</parameter>
        <parameter name="Weight for RT">25.0</parameter>
        <parameter name="Require same charge state">false</parameter>
        <parameter name="Require same ID">false</parameter>
        <parameter name="Compare isotope pattern" selected="false">
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        </parameter>
        <parameter name="Compare spectra similarity" selected="false">
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_duplicatefilter.DuplicateFilterModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">filtered</parameter>
        <parameter name="Filter mode">NEW AVERAGE</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="RT tolerance" type="absolute">0.1</parameter>
        <parameter name="Require same identification">false</parameter>
        <parameter name="Remove original peaklist">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.gapfill_peakfinder.multithreaded.MultiThreadPeakFinderModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">gap-filled</parameter>
        <parameter name="Intensity tolerance">0.2</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" type="absolute">0.1</parameter>
        <parameter name="Remove original feature list">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_duplicatefilter.DuplicateFilterModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">filtered</parameter>
        <parameter name="Filter mode">NEW AVERAGE</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.01</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="RT tolerance" type="absolute">0.2</parameter>
        <parameter name="Require same identification">false</parameter>
        <parameter name="Remove original peaklist">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_peakfilter.PeakFilterModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">filtered</parameter>
        <parameter name="Duration" selected="false">
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        </parameter>
        <parameter name="Area" selected="true">
            <min>2000.0</min>
            <max>1.0E7</max>
        </parameter>
        <parameter name="Height" selected="true">
            <min>2000.0</min>
            <max>1.0E7</max>
        </parameter>
        <parameter name="# data points" selected="false">
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        </parameter>
        <parameter name="FWHM" selected="false">
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        </parameter>
        <parameter name="Tailing factor" selected="false">
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        </parameter>
        <parameter name="Asymmetry factor" selected="false">
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        </parameter>
        <parameter name="Keep only features with MS/MS scan">false</parameter>
        <parameter name="Remove source feature list after filtering">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">filtered</parameter>
        <parameter name="Minimum peaks in a row" selected="true">5.0</parameter>
        <parameter name="Minimum peaks in an isotope pattern" selected="false"/>
        <parameter name="m/z" selected="true">
            <min>0.0</min>
            <max>800.0</max>
        </parameter>
        <parameter name="Retention time" selected="false"/>
        <parameter name="Peak duration range" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false">
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        </parameter>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Parameter">No parameters defined</parameter>
        <parameter name="Only identified?">false</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Keep or remove rows">Keep rows that match all criteria</parameter>
        <parameter name="Keep only peaks with MS2 scan (GNPS)">true</parameter>
        <parameter name="Reset the peak number ID">true</parameter>
        <parameter name="Remove source feature list after filtering">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.csvexport.CSVExportModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Filename">
            <current_file>/media/echo/DATA/yellow/massive/cell/massive.ucsd.edu/MSV000083593/ccms_peak/mzXML/mcnebula2/serum.csv</current_file>
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        </parameter>
        <parameter name="Field separator">,</parameter>
        <parameter name="Export common elements">
            <item>Export row ID</item>
            <item>Export row m/z</item>
            <item>Export row retention time</item>
        </parameter>
        <parameter name="Export data file elements">
            <item>Peak RT start</item>
            <item>Peak RT end</item>
            <item>Peak area</item>
        </parameter>
        <parameter name="Export quantitation results and other information">false</parameter>
        <parameter name="Identification separator">;</parameter>
        <parameter name="Filter rows">ALL</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.siriusexport.SiriusExportModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Mass list">mass2</parameter>
        <parameter name="Filename">
            <current_file>/media/echo/DATA/yellow/massive/cell/massive.ucsd.edu/MSV000083593/ccms_peak/mzXML/mcnebula2/serum.mgf</current_file>
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        </parameter>
        <parameter name="Merge MS/MS" selected="true">
            <parameter name="Select spectra to merge">across samples</parameter>
            <parameter name="m/z merge mode">weighted average (remove outliers)</parameter>
            <parameter name="intensity merge mode">mean intensity</parameter>
            <parameter name="Expected mass deviation">
                <absolutetolerance>0.002</absolutetolerance>
                <ppmtolerance>20.0</ppmtolerance>
            </parameter>
            <parameter name="Cosine threshold (%)">0.0</parameter>
            <parameter name="Peak count threshold (%)">0.3</parameter>
            <parameter name="Isolation window offset (m/z)">0.0</parameter>
            <parameter name="Isolation window width (m/z)">1.0</parameter>
        </parameter>
    </batchstep>
</batch>
