<?xml version="1.0" encoding="UTF-8"?><batch>
    <batchstep method="io.github.mzmine.modules.io.rawdataimport.RawDataImportModule">
        <parameter name="Raw data file names">
            <file>/media/echo/DATA/yellow/qjj/mzml/20220622-QJJ-SP-NEG.mzML</file>
            <file>/media/echo/DATA/yellow/qjj/mzml/20220622-QJJ-KB-NEG.mzML</file>
            <file>/media/echo/DATA/yellow/qjj/mzml/20220614-QJJ-SP-NEG.mzML</file>
            <file>/media/echo/DATA/yellow/qjj/mzml/20220614-QJJ-KB-NEG.mzML</file>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Mass detector" selected="Centroid">
            <module name="Centroid">
                <parameter name="Noise level">2000.0</parameter>
            </module>
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        </parameter>
        <parameter name="Mass list name">masses1</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>2</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Mass detector" selected="Centroid">
            <module name="Centroid">
                <parameter name="Noise level">100.0</parameter>
            </module>
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        </parameter>
        <parameter name="Mass list name">masses2</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_ADAPchromatogrambuilder.ADAPChromatogramBuilderModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
        </parameter>
        <parameter name="Mass list">masses1</parameter>
        <parameter name="Min group size in # of scans">5</parameter>
        <parameter name="Group intensity threshold">1500.0</parameter>
        <parameter name="Min highest intensity">2000.0</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">chromatograms</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.DeconvolutionModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Suffix">deconvoluted</parameter>
        <parameter name="Algorithm" selected="Wavelets (ADAP)">
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            <module name="Wavelets (ADAP)">
                <parameter name="S/N threshold">7.0</parameter>
                <parameter name="S/N estimator" selected="Intensity window SN">
                    <module name="Intensity window SN"/>
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                </parameter>
                <parameter name="min feature height">2000.0</parameter>
                <parameter name="coefficient/area threshold">50.0</parameter>
                <parameter name="Peak duration range">
                    <min>0.0</min>
                    <max>10.0</max>
                </parameter>
                <parameter name="RT wavelet range">
                    <min>0.0</min>
                    <max>0.1</max>
                </parameter>
            </module>
        </parameter>
        <parameter measure="MEDIAN" name="m/z center calculation" weighting="NONE">CenterFunction</parameter>
        <parameter name="m/z range for MS2 scan pairing (Da)" selected="false"/>
        <parameter name="RT range for MS2 scan pairing (min)" selected="false"/>
        <parameter name="Remove original feature list">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_deisotoper.IsotopeGrouperModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">deisotoped</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" type="absolute">0.2</parameter>
        <parameter name="Monotonic shape">true</parameter>
        <parameter name="Maximum charge">1</parameter>
        <parameter name="Representative isotope">Lowest m/z</parameter>
        <parameter name="Remove original peaklist">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Feature list name">Aligned feature list</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="Weight for m/z">75.0</parameter>
        <parameter name="Retention time tolerance" type="absolute">0.3</parameter>
        <parameter name="Weight for RT">25.0</parameter>
        <parameter name="Require same charge state">false</parameter>
        <parameter name="Require same ID">false</parameter>
        <parameter name="Compare isotope pattern" selected="false">
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        </parameter>
        <parameter name="Compare spectra similarity" selected="false">
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.gapfill_peakfinder.multithreaded.MultiThreadPeakFinderModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">gap-filled</parameter>
        <parameter name="Intensity tolerance">0.2</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" type="absolute">0.2</parameter>
        <parameter name="Remove original feature list">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_duplicatefilter.DuplicateFilterModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">filtered</parameter>
        <parameter name="Filter mode">NEW AVERAGE</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.01</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="RT tolerance" type="absolute">0.3</parameter>
        <parameter name="Require same identification">false</parameter>
        <parameter name="Remove original peaklist">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_peakfilter.PeakFilterModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">filtered</parameter>
        <parameter name="Duration" selected="false">
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        </parameter>
        <parameter name="Area" selected="true">
            <min>20000.0</min>
            <max>1.0E9</max>
        </parameter>
        <parameter name="Height" selected="false">
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        </parameter>
        <parameter name="# data points" selected="false">
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        </parameter>
        <parameter name="FWHM" selected="false">
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        </parameter>
        <parameter name="Tailing factor" selected="false">
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        </parameter>
        <parameter name="Asymmetry factor" selected="false">
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        </parameter>
        <parameter name="Keep only features with MS/MS scan">false</parameter>
        <parameter name="Remove source feature list after filtering">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_groupms2.GroupMS2Module">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Retention time tolerance" type="absolute">0.1</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.5</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="Limit by RT edges">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">filtered</parameter>
        <parameter name="Minimum peaks in a row" selected="true">2.0</parameter>
        <parameter name="Minimum peaks in an isotope pattern" selected="false"/>
        <parameter name="m/z" selected="false">
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        </parameter>
        <parameter name="Retention time" selected="false"/>
        <parameter name="Peak duration range" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false">
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        </parameter>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Parameter">No parameters defined</parameter>
        <parameter name="Only identified?">false</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Keep or remove rows">Keep rows that match all criteria</parameter>
        <parameter name="Keep only peaks with MS2 scan (GNPS)">true</parameter>
        <parameter name="Reset the peak number ID">true</parameter>
        <parameter name="Remove source feature list after filtering">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.gnpsexport.fbmn.GnpsFbmnExportAndSubmitModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Filename">
            <current_file>/media/echo/存储—WYW/test.mgf</current_file>
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        </parameter>
        <parameter name="Mass list">masses2</parameter>
        <parameter name="Merge MS/MS (experimental)" selected="false">
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        </parameter>
        <parameter name="Filter rows">ALL</parameter>
        <parameter name="Submit to GNPS" selected="false">
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        </parameter>
        <parameter name="Open folder">false</parameter>
    </batchstep>
</batch>
